CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:Membranestainintensityconversions
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:Membranestainintensityconversions
    Name the output image:SmoothedImageOrig
    Select smoothing method:Median Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5.0
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
Closing:[module_num:6|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
    Select the input image:SmoothedImageOrig
    Name the output image:Closing
    Structuring element:disk,5

EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:Closing
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Dark holes
    Range of hole sizes:50,120
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:Artificialcellcolony
    Typical diameter of objects, in pixel units (Min,Max):50,120
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0
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
ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:Artificialcellcolony
    Name the output objects:Expandedcellsincolony
    Select the operation:Expand objects until touching
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
MeasureObjectIntensity:[module_num:10|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
    Select images to measure:Membranestainintensityconversions
    Select objects to measure:Expandedcellsincolony

DisplayDataOnImage:[module_num:11|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
    Display object or image measurements?:Object
    Select the input objects:Expandedcellsincolony
    Measurement to display:Intensity_MeanIntensityEdge_Membranestainintensityconversions
    Select the image on which to display the measurements:Membranestainintensityconversions
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    Name the output image that has the measurements displayed:DisplayImage2
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    Image elements to save:Image
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    Display mode:Color
    Color map:gray_r
    Display background image?:No
    Color map scale:Use this image's measurement range
    Color map range:0.4,0.65

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|Z:\\Andre\\Image Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Expandedcellsincolony|Intensity_MaxIntensity_Membranestainintensityconversions,Expandedcellsincolony|Intensity_MinIntensityEdge_Membranestainintensityconversions,Expandedcellsincolony|Intensity_MADIntensity_Membranestainintensityconversions,Expandedcellsincolony|Intensity_StdIntensity_Membranestainintensityconversions,Expandedcellsincolony|Intensity_MassDisplacement_Membranestainintensityconversions,Expandedcellsincolony|Intensity_IntegratedIntensityEdge_Membranestainintensityconversions,Expandedcellsincolony|Intensity_MinIntensity_Membranestainintensityconversions,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt1052022GramA2_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:13|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:DisplayImage2
    Select method for constructing file names:From image filename
    Select image name for file prefix:Membranestainintensityconversions
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:cellprofAutoscaleBIG
    Saved file format:png
    Output file location:Same folder as image|Desktop
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No
